CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (file does endwith ".tif") (file does containregexp "Series\\d{3}")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"Batch": "text", "C": "text", "Channel": "text", "ChannelName": "text", "ChannelNumber": "text", "ColorFormat": "text", "FileLocation": "text", "Frame": "text", "Plate": "text", "Series": "text", "SeriesFile": "text", "Site": "text", "SizeC": "text", "SizeT": "text", "SizeX": "text", "SizeY": "text", "SizeZ": "text", "T": "text", "Well": "text", "Z": "text"}
    Extraction method count:3
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^.*(?P<SeriesFile>[sS]eries[0-9]{3})_[Cc]h(?P<ChannelNumber>[0-9]{2})\.tif$
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (extension does istif)
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:^.*E16_(?P<Batch>M[0-9]{1,2}).*
    Extract metadata from:All images
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    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does containregexp "[cC]h00")
    Name to assign these images:Dapi
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does containregexp "[Cc]h01")
    Name to assign these images:S100A8
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does containregexp "[Cc]h02")
    Name to assign these images:CD41
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does containregexp "[Cc]h03")
    Name to assign these images:F4_80
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file doesnot containregexp "[Cc]h")
    Name to assign these images:rgb
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:Batch
    Metadata category:SeriesFile

ColorToGray:[module_num:5|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
    Select the input image:Dapi
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:No
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    Convert green to gray?:No
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    Convert blue to gray?:Yes
    Name the output image:DapiGray
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
MeasureGranularity:[module_num:6|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
    Select images to measure:DapiGray
    Measure within objects?:No
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    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:DapiGray
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):20,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.12,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Minimum Cross-Entropy

IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:IdentifyPrimaryObjects
    Name the objects to be identified:nuclei
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:DapiGray
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.02,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Minimum Cross-Entropy

MeasureObjectIntensity:[module_num:9|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enabled:False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
    Select images to measure:DapiGray
    Select objects to measure:nuclei

MeasureObjectSizeShape:[module_num:10|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enabled:False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
    Select object sets to measure:nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectIntensityDistribution:[module_num:11|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enabled:False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
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:nuclei
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
ConvertObjectsToImage:[module_num:12|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
    Select the input objects:nuclei
    Name the output image:CellImage
    Select the color format:Color
    Select the colormap:Default

OverlayObjects:[module_num:13|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
    Input:CellImage
    Name the output image:dapi_nuclei
    Objects:nuclei
    Opacity:0.3

ExportToSpreadsheet:[module_num:14|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|E16_S100A8_CD41_F4_80/cellprofiler_output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:S100A8_
    Overwrite existing files without warning?:Yes
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
SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:dapi_nuclei
    Select method for constructing file names:Single name
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    Enter single file name:cellprofiler_
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    Saved file format:png
    Output file location:Default Input Folder sub-folder|E16_S100A8_CD41_F4_80/cellprofiler_output
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:Yes
    Base image folder:Default Input Folder sub-folder|P5_CLEC4F_CD41/cellprofiler_output/V3
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    Save with lossless compression?:Yes
